PsychoPy2experiment version="2020.1.3"
Settings
  Audio lib = ptb
  Enable Escape = False
  Experiment info = {'participant': '', 'Student ID number (this is for RPP purpose only)': '', 'Age': '', 'Gender': '', 'Handedness': '', 'In this experiment, you need to constantly adjust the position of your cursor. what tool are your using to complete this experiment (mouse, trackpad,etc)?': '', 'Do you have normal or correct to normal vision?': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = Face Localization
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $image_file
      pos [set every repeat] = [coex, coey]
      size = (0.15, 0.15)
      startVal [frame N] = 60
      stopVal [frame N] = 63
      units = height
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    MouseComponent mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [frame N] = 60
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    ImageComponent image_6
      image = target.png
      size = (0.1, 0.1)
      startVal [frame N] = 0.0
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    CodeComponent code_3
      Code Type = Auto->JS
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  Routine Intro
    TextComponent text_2
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        In this experiment, please keep your eyes fixed on the “+” at the center of your screen at ALL TIMES.

        (Press the spacebar  to proceed)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Intro_2
    TextComponent text_3
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        You will see a circular target appearing on the screen very briefly. Magic letter: m

        (Press the spacebar to proceed)
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Intro_3
    TextComponent text_4
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        Your task is to move your cursor to click the center of the target after it disappears.

        Please try to remain fixated on the “+” while you adjust the cursor.

        (Press the spacebar to proceed)
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Check
    TextComponent text_5
      letterHeight = 0.04
      startVal [frame N] = 0.0
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      text:
        Please enter the magic letter on the keyboard to continue.
        Otherwise, please reread the following instruction carefully to find the magic letter.

        In this experiment, you need to fixate on the “+” at the center of your screen at ALL TIMES.
        You will see a circular target appearing on the screen very briefly. Magic letter: m.
        Your task is to move your cursor to indicate the center of the target after it disappears.
        After clicking the location of the target, click on the “+” to start the next trial.
    KeyboardComponent key_resp_4
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Pause_1
    CodeComponent code_2
      Code Type = Auto->JS
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    TextComponent text_6
      letterHeight = 0.05
      startVal [frame N] = 0.0
      text = $RestMessage
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine example
    ImageComponent image_2
      image [set every repeat] = $image_file
      pos [set every repeat] = [coex, coey]
      size = (0.15, 0.15)
      startVal [frame N] = 60
      stopVal [frame N] = 90
      units = height
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [frame N] = 60
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    ImageComponent image_5
      image = target.png
      size = (0.1, 0.1)
      startVal [frame N] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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  Routine start
    TextComponent text_8
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        The experiment will now start, press the spacebar to proceed.

        Please keep fixated ALL THE TIME. Please try to respond as soon as possible and DO NOT pause within experiment.

        Please DON’T PRESS ESCAPE KEY or quit the full screen AT ANY TIME before you finish the experiment.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine End
    TextComponent text_10
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        This is the end of the experiment. Thank you for your participation!

        You will receive your RPP credits (or payment) in 1-2 working days. If you have any questions or concerns, please contact the experimenter Zixuan Wang at zixuan@berkeley.edu.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Demo
    TextComponent text_11
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        You can now see the experiment in action with a short demo.

        Note that in the actual experiment, the stimuli occurs for a much shorter duration than in this demo.

        (Press the spacebar to proceed)
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Infosurvey
    FormComponent form
      Data Format = rows
      Item Padding = 0.05
      Items = Presurvey.xlsx
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Text Height = 0.03
      startVal [frame N] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent key_resp_9
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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    TextComponent text_14
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [frame N] = 0.0
      text = (Press the spacebar to continue)
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    TextComponent text_15
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [frame N] = 0.0
      text = Please answer the following questions. 
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  Routine last2
    ImageComponent image_3
      image = womanmask.png
      pos [set every repeat] = [coex, coey]
      size = (0.15, 0.15)
      startVal [frame N] = 60
      stopVal [duration (s)] = 63
      units = height
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [frame N] = 60
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    ImageComponent image_7
      image = target.png
      size = (0.1, 0.1)
      startVal [frame N] = 0.0
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    CodeComponent code_4
      Code Type = JS
      Each JS Frame:
        if (frameN < 63) {
            document.body.style.cursor='none';
        } else {
            document.body.style.cursor='crosshair';
        }
  Routine backtocenter
    ImageComponent image_4
      image = target.png
      size = (0.1, 0.1)
      startVal [frame N] = 0.0
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    MouseComponent mouse_4
      clickable = image_4,N,F
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [frame N] = 0.0
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    ImageComponent N
      image = N.png
      pos = (0.15, 0)
      size = (0.1, 0.1)
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    ImageComponent F
      image = F.png
      pos = (-0.15, 0)
      size = (0.1, 0.1)
      startVal [frame N] = 0.0
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  Routine Intro_4
    TextComponent text_7
      letterHeight = 0.05
      startVal [frame N] = 0.0
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      text:
        After clicking on the location of the target,  determine whether the target was a face or not.

        If you think what you saw was a face, click on F, if not , click on N.

        (Press the spacebar to proceed)
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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  Routine Consent
    ImageComponent consent
      image = consent.png
      size = (1.6, 0.9)
      startVal [frame N] = 0.0
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    ImageComponent agree
      image = agree.png
      pos = (0.7, -0.45)
      size = (0.15, 0.045)
      startVal [frame N] = 0.0
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    ImageComponent disagree
      image = disagree.png
      pos = (-0.7, -0.45)
      size = (0.15, 0.045)
      startVal [frame N] = 0.0
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    MouseComponent mouse_5
      clickable = agree
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [frame N] = 0.0
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  Routine Welcome
    TextComponent text
      letterHeight = 0.04
      startVal [frame N] = 0.0
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      text:
        Welcome to the experiment. It is highly recommended that you complete it with a google chrome browser to minimize potential technical issues.

        Make sure to keep your screen clean.

        The entire experiment will last for roughly one hour, with a break per every 5-7 minutes.

        Please make sure not to exit full screen mode during the experiment to ensure maximum accuracy. Please also refrain from zooming in the experiment window.

        The ideal eye-to-screen distance can be approximated by the length of your arm.

        (Press the spacebar to proceed)
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [frame N] = 0.0
      store = nothing
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Flow
  Routine Consent
  Routine Welcome
  Routine Intro
  Routine Intro_2
  Routine Intro_3
  Routine Intro_4
  Routine Check
  Routine Demo
  LoopInitiator demo loopType="TrialHandler"
    conditionsFile = CircleLoop-testtrial.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('coex', 0.254556), ('coey', -0.254556), ('image_file', 'womanmask.png')]),
      OrderedDict([('coex', -0.21915), ('coey', -0.285606), ('image_file', 'noisePatch.png')]),
      OrderedDict([('coex', -0.285606), ('coey', 0.21915), ('image_file', None)]),
      OrderedDict([('coex', 0.137754), ('coey', 0.332586), ('image_file', None)]),
      OrderedDict([('coex', 0.285606), ('coey', 0.21915), ('image_file', None)]),
      OrderedDict([('coex', -0.093168), ('coey', 0.347724), ('image_file', None)]),
      OrderedDict([('coex', 0.285606), ('coey', -0.21915), ('image_file', None)]),
      OrderedDict([('coex', -0.332586), ('coey', 0.137754), ('image_file', None)]),
      OrderedDict([('coex', -0.347724), ('coey', 0.093168), ('image_file', None)]),
      OrderedDict([('coex', -0.332586), ('coey', -0.137754), ('image_file', None)])]
    Routine example
    Routine backtocenter
  LoopTerminator demo
  Routine start
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 8
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = CircleLoop-official.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('coex', 0.36), ('coey', 0.0), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', 0.356904), ('coey', 0.04698), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.347724), ('coey', 0.093168), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.332586), ('coey', 0.137754), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', 0.31176), ('coey', 0.18), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', 0.285606), ('coey', 0.21915), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.254556), ('coey', 0.254556), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.21915), ('coey', 0.285606), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.18), ('coey', 0.31176), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.137754), ('coey', 0.332586), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', 0.093168), ('coey', 0.347724), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', 0.04698), ('coey', 0.356904), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', 0.0), ('coey', 0.36), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', -0.04698), ('coey', 0.356904), ('image_file', 'womanmask.png')]),
        OrderedDict([('coex', -0.093168), ('coey', 0.347724), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', -0.137754), ('coey', 0.332586), ('image_file', 'noisePatch.png')]),
        OrderedDict([('coex', -0.18), ('coey', 0.31176), ('image_file', 'womanmask.png')])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
      Routine trial
      Routine backtocenter
    LoopTerminator trials
    Routine Pause_1
  LoopTerminator block
  Routine End
